OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Lua Stimulator => #1
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/AllModules_20reps_PinkN.lua
-> Sound Player
  PLAY trigger = 1999
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/ExperimentsOV/PinkNoise18s.wav
  Loop = false
#1 -> Sound Player
  PLAY trigger = 1998
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise22s.wav
  Loop = false
#1 -> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Experiment information=#0.Experiment information, Signal=#0.Signal stream, Stimulations=#1 -> EDF File Writer
  Filename = D:/Neuro/MasterThesis/Records/AllModules_V2-HeadRazer-FernandaIbanez-[$core{date}-$core{time}].edf
Data=#0.Signal stream, Stimulations=#1, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stimulations=#1 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#1 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/Neuro/MasterThesis/ExperimentsOV/conection_ov_ino.py COM13
