OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  AIR DEMO - 4 stimuli
Comment
  VIB DEMO - 4 stimuli
Comment
  CARESS DEMO - 4 stimuli

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Lua Stimulator => #2
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/AllModules_2reps_PN.lua
Lua Stimulator => #3
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/AllModules_2reps_PN.lua
0x341d3912 Lua Stimulator => #4
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/AllModules_2reps_PN.lua
Input stimulations 1=#2, Input stimulations 2=#3, Input stimulations 3=#4 -> Stimulation multiplexer => #5
-> Sound Player
  PLAY trigger = 1998
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise22s.wav
  Loop = false
#5 -> Sound Player
  PLAY trigger = 1999
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise18s.wav
  Loop = false
#5 -> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Input stimulations=#5 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#5 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/Neuro/MasterThesis/ExperimentsOV/conection_ov_ino.py COM13
