OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Lua Stimulator => #0
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/BasalPN_3min.lua
-> Sound Player
  PLAY trigger = 1997
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise120s.wav
  Loop = false
#0 -> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 2
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
Acquisition client => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Experiment information=#4.Experiment information, Signal=#4.Signal stream, Stimulations=#0 -> EDF File Writer
  Filename = D:/Neuro/MasterThesis/Records/BasalPN-HeadRazer-FernandaIbanez-[$core{date}-$core{time}].edf
Data=#4.Signal stream, Channel Units=#4.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
