OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Comment
  Enable this if you want to see the signals
Comment
  Pasos:

  1. Dar carta de consentimiento informado

  2. Limpiar zonas del craneo: Electrodo blanco, electrodo azul y mastoides.
  Si se puede limpiar la linea central mejor.

  3. Medir cabeza y colocar el gorro.

  4. Revisar impedancias e ir poniendo gel

  5. Poner la demo mientras se aplica gel (si son dos)
Comment
  Enable one Lua box to stimulate on a specific module
Comment
  AIR DEMO - 4 stimuli
  ANSWERS ARE:
  1324
  4123
  4231
  2314
Comment
  VIB DEMO - 4 stimuli
  ANSWERS ARE:
  3412
  2314
  3214
  3142
Comment
  CARESS DEMO - 4 stimuli
  ANSWERS ARE:
  3421
  1423
  1342
  4123
Settings
  Setting 1 = 0

0x341d3912 Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream, Channel Units=#0.Channel units -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Lua Stimulator => #2
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/Demo/AIR_4_reps_PN.lua
-> Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 1
-> Player Controller
  Stimulation name = 32770
  Action to perform = Stop
#2 -> Sound Player
  PLAY trigger = 1999
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise18s.wav
  Loop = false
#2 -> Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/Neuro/MasterThesis/ExperimentsOV/conection_ov_ino.py COM13
Input stimulations=#2 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#2 -> Sound Player
  PLAY trigger = 1998
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise22s.wav
  Loop = false

0x341d3912 Lua Stimulator => #9
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/Demo/VIB_4_reps_PN.lua
-> 0x341d3912 Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 1
-> 0x341d3912 Player Controller
  Stimulation name = 32770
  Action to perform = Stop
#9 -> 0x341d3912 Sound Player
  PLAY trigger = 1999
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise18s.wav
  Loop = false
#9 -> 0x341d3912 Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/Neuro/MasterThesis/ExperimentsOV/conection_ov_ino.py COM13
Input stimulations=#9 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#9 -> 0x341d3912 Sound Player
  PLAY trigger = 1998
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise22s.wav
  Loop = false

0x341d3912 Lua Stimulator => #16
  Lua Script = D:/Neuro/MasterThesis/ExperimentsOV/Demo/CAR_4_reps_PN.lua
-> 0x341d3912 Stimulation Validator
  Stimulation to count = 32770
  Number for validation = 1
-> 0x341d3912 Player Controller
  Stimulation name = 32770
  Action to perform = Stop
#16 -> 0x341d3912 Sound Player
  PLAY trigger = 1999
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise18s.wav
  Loop = false
#16 -> 0x341d3912 Run Command
  Stimulation 1 = 33084
  Command 1 = wt python D:/Neuro/MasterThesis/ExperimentsOV/conection_ov_ino.py COM13
Input stimulations=#16 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#16 -> 0x341d3912 Sound Player
  PLAY trigger = 1998
  STOP trigger = OVTK_StimulationId_Number_1B
  File to play = D:/Neuro/MasterThesis/Matlab/OpenVibe/PinkNoise22s.wav
  Loop = false
